PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '02'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['image_rem.jpg', 'mainTrials.xlsx', 'pracTrials.xlsx']
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [2240, 1260]
  color = white
  expName = sternberg
  keyboardBackend = Pyglet
  logging level = warning
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Routines
  Routine practInstruct
    TextComponent instr1
      color = black
      letterHeight = 0.035
      pos = [0, 0.07]
      startVal [time (s)] = 0.0
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      text:
        Respond with the following keys:
         - LEFT KEY if the number was NOT in the sequence.
         - RIGHT KEY if the number WAS in the sequence.

        There will be twelve practice trials in which you will be given feedback. Try to respond as quickly and as accurately as possible.

        When you are ready to begin press any key.
    KeyboardComponent OK1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if Corr_count_prac <300:
            continueRoutine = True
    ImageComponent image
      image [set every repeat] = image_rem.jpg
      interpolate = nearest
      pos = (0, -0.32)
      size = (0.4, 0.34)
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent message
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp.rt)

        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine mainInstruct
    TextComponent instr2
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        OK, ready to start the main experiment?

        Remember:
         - LEFT CURSOR for NOT in the sequence
         - RIGHT CURSOR for IN the sequence
        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent OK2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if Corr_count <300:
            continueRoutine = True
    TextComponent text
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.025
      pos = (0,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Practice Accuracy: ' + str((Corr_count_prac/12)*100) + '%'
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  Routine thanks
    TextComponent thanksMsg
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        The task has been completed. Thanks for taking part!
        Press any key to exit.
    TextComponent totalsc
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.025
      pos = (0,-0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Accuracy: ' + str((Corr_count/126)*100) + '%'
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_2
    TextComponent fixation_2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentSet_2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.7
      text [set every repeat] = $numberSet
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    TextComponent presentTarget_2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 2
      text [set every repeat] = $target
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    KeyboardComponent resp_2
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 4.7
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        Corr_count =0
      End Routine:
        if resp_2.corr:
            Corr_count +=1
    ImageComponent image_3
      image [set every repeat] = image_rem.jpg
      interpolate = nearest
      opacity = 0
      pos = (0, -.5)
      size = (0.27, 0.36)
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 2.0
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  Routine trial_3
    TextComponent fixation_3
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentSet_3
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.7
      text [set every repeat] = $numberSet
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    TextComponent presentTarget_3
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 2
      text [set every repeat] = $target
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    KeyboardComponent resp_3
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 4.7
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        Corr_count =0
      End Routine:
        if resp_3.corr:
            Corr_count +=1
    ImageComponent image_4
      image [set every repeat] = image_rem.jpg
      interpolate = nearest
      opacity = 0
      pos = (0, -.5)
      size = (0.27, 0.36)
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 2.0
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  Routine Break_1
    TextComponent break_msg
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        End of Trial 1.

        When you are ready to continue the task, press any key.
    KeyboardComponent OK2_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break_2
    TextComponent break_msg_2
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        End of Trial 2.

        When you are ready to continue the task, press any key.
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if Corr_count <300:
            continueRoutine = True
    KeyboardComponent OK2_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pracInstruct1
    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be presented with a sequence of between 1 and 6 randomly ordered numbers.

        Following a short delay you will then be presented with a single number and you will have to decide whether this new number was a member of the sequence.

        Press any key to continue.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback2
    CodeComponent message2
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp2.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(resp2.rt)

        else:
          msg="Oops! That was wrong"
    TextComponent feedback2_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine feedback3
    TextComponent feedback_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg3
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    CodeComponent message_3
      Code Type = Auto->JS
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      Begin Experiment:
        #msg variable just needs some value at start
        msg3=''
      Begin Routine:
        if resp_3.corr:#stored on last run routine
          msg3="Correct! RT=%.3f" %(resp_3.rt)

        else:
          msg3="Oops! That was wrong"
  Routine trial
    TextComponent fixation
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentSet
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.7
      text [set every repeat] = $numberSet
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    TextComponent presentTarget
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 2
      text [set every repeat] = $target
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    KeyboardComponent resp
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 4.7
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        Corr_count_prac =0
      End Routine:
        if resp.corr:
            Corr_count_prac +=1
  Routine trial2
    TextComponent fixation2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentSet2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 1.7
      text [set every repeat] = $numberSet
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    TextComponent presentTarget2
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 2
      text [set every repeat] = $target
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    KeyboardComponent resp2
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 4.7
      storeCorrect = True
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    CodeComponent code2
      Code Type = Auto->JS
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      Begin Experiment:
        Corr_count =0
      End Routine:
        if resp2.corr:
            Corr_count +=1
  Routine feedback2_2
Flow
  Routine pracInstruct1
  Routine practInstruct
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = pracTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'setSize': 1, 'posInSet': 1, 'present': 'y', 'numberSet': 6, 'target': 6, 'corrAns': 'right'},
      {'setSize': 1, 'posInSet': '--', 'present': 'n', 'numberSet': 5, 'target': 0, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': 1, 'present': 'y', 'numberSet': '4 8', 'target': 4, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '2 1', 'target': 5, 'corrAns': 'left'},
      {'setSize': 3, 'posInSet': 3, 'present': 'y', 'numberSet': '2 9 4', 'target': 4, 'corrAns': 'right'},
      {'setSize': 3, 'posInSet': '--', 'present': 'n', 'numberSet': '4 1 0', 'target': 2, 'corrAns': 'left'},
      {'setSize': 4, 'posInSet': 2, 'present': 'y', 'numberSet': '1 5 2 9', 'target': 5, 'corrAns': 'right'},
      {'setSize': 4, 'posInSet': '--', 'present': 'n', 'numberSet': '3 1 9 4', 'target': 6, 'corrAns': 'left'},
      {'setSize': 5, 'posInSet': 4, 'present': 'y', 'numberSet': '1 7 9 8 5', 'target': 8, 'corrAns': 'right'},
      {'setSize': 5, 'posInSet': '--', 'present': 'n', 'numberSet': '9 6 7 4 5', 'target': 3, 'corrAns': 'left'},
      {'setSize': 6, 'posInSet': 1, 'present': 'y', 'numberSet': '4 3 1 7 9 8', 'target': 4, 'corrAns': 'right'},
      {'setSize': 6, 'posInSet': '--', 'present': 'n', 'numberSet': '5 7 0 4 1 2', 'target': 6, 'corrAns': 'left'}]
    Routine trial
    Routine feedback
  LoopTerminator pracTrials
  Routine mainInstruct
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 2:43
    conditionsFile = mainTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'setSize': 1, 'posInSet': '--', 'present': 'n', 'numberSet': 5, 'target': 8, 'corrAns': 'left'},
      {'setSize': 1, 'posInSet': '--', 'present': 'n', 'numberSet': 9, 'target': 6, 'corrAns': 'left'},
      {'setSize': 1, 'posInSet': '--', 'present': 'n', 'numberSet': 1, 'target': 7, 'corrAns': 'left'},
      {'setSize': 1, 'posInSet': 1, 'present': 'y', 'numberSet': 4, 'target': 4, 'corrAns': 'right'},
      {'setSize': 1, 'posInSet': 1, 'present': 'y', 'numberSet': 7, 'target': 7, 'corrAns': 'right'},
      {'setSize': 1, 'posInSet': 1, 'present': 'y', 'numberSet': 8, 'target': 8, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '8 9', 'target': 5, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '6 8', 'target': 9, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '7 9', 'target': 1, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': 1, 'present': 'y', 'numberSet': '6 2', 'target': 6, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': 1, 'present': 'y', 'numberSet': '2 3', 'target': 2, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': 1, 'present': 'y', 'numberSet': '3 4', 'target': 3, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '7 1', 'target': 8, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '4 1', 'target': 6, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '5 2', 'target': 7, 'corrAns': 'left'}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
    Routine trial2
    Routine feedback2
  LoopTerminator trials
  Routine Break_1
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 43:85
    conditionsFile = mainTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'setSize': 1, 'posInSet': '--', 'present': 'n', 'numberSet': 5, 'target': 8, 'corrAns': 'left'},
      {'setSize': 1, 'posInSet': '--', 'present': 'n', 'numberSet': 9, 'target': 6, 'corrAns': 'left'},
      {'setSize': 1, 'posInSet': '--', 'present': 'n', 'numberSet': 1, 'target': 7, 'corrAns': 'left'},
      {'setSize': 1, 'posInSet': 1, 'present': 'y', 'numberSet': 4, 'target': 4, 'corrAns': 'right'},
      {'setSize': 1, 'posInSet': 1, 'present': 'y', 'numberSet': 7, 'target': 7, 'corrAns': 'right'},
      {'setSize': 1, 'posInSet': 1, 'present': 'y', 'numberSet': 8, 'target': 8, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '8 9', 'target': 5, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '6 8', 'target': 9, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '7 9', 'target': 1, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': 1, 'present': 'y', 'numberSet': '6 2', 'target': 6, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': 1, 'present': 'y', 'numberSet': '2 3', 'target': 2, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': 1, 'present': 'y', 'numberSet': '3 4', 'target': 3, 'corrAns': 'right'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '7 1', 'target': 8, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '4 1', 'target': 6, 'corrAns': 'left'},
      {'setSize': 2, 'posInSet': '--', 'present': 'n', 'numberSet': '5 2', 'target': 7, 'corrAns': 'left'}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
    Routine trial2
    Routine feedback2
  LoopTerminator trials_2
  Routine Break_2
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 85:127
    conditionsFile = mainTrials.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trial2
    Routine feedback2
  LoopTerminator trials_3
  Routine thanks
